---
API: 3
OpenSesame: 4.0.0a33
Platform: posix
---
set width 1024
set title "Wisconsin Card Sorting Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/ede/misc/opensesame_workshop_KLI2023/experiments"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 64
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 response_color yellow
	setcycle 0 response_number 1
	setcycle 0 response_shape star
	setcycle 0 color1 yellow
	setcycle 0 color2 green
	setcycle 0 color3 blue
	setcycle 0 color4 red
	setcycle 0 shape1 star
	setcycle 0 shape2 circle
	setcycle 0 shape3 triangle
	setcycle 0 shape4 cross
	setcycle 0 number1 1
	setcycle 0 number2 2
	setcycle 0 number3 3
	setcycle 0 number4 4
	setcycle 1 response_color green
	setcycle 1 response_number 1
	setcycle 1 response_shape star
	setcycle 1 color1 yellow
	setcycle 1 color2 green
	setcycle 1 color3 blue
	setcycle 1 color4 red
	setcycle 1 shape1 star
	setcycle 1 shape2 circle
	setcycle 1 shape3 triangle
	setcycle 1 shape4 cross
	setcycle 1 number1 1
	setcycle 1 number2 2
	setcycle 1 number3 3
	setcycle 1 number4 4
	setcycle 2 response_color blue
	setcycle 2 response_number 1
	setcycle 2 response_shape star
	setcycle 2 color1 yellow
	setcycle 2 color2 green
	setcycle 2 color3 blue
	setcycle 2 color4 red
	setcycle 2 shape1 star
	setcycle 2 shape2 circle
	setcycle 2 shape3 triangle
	setcycle 2 shape4 cross
	setcycle 2 number1 1
	setcycle 2 number2 2
	setcycle 2 number3 3
	setcycle 2 number4 4
	setcycle 3 response_color red
	setcycle 3 response_number 1
	setcycle 3 response_shape star
	setcycle 3 color1 yellow
	setcycle 3 color2 green
	setcycle 3 color3 blue
	setcycle 3 color4 red
	setcycle 3 shape1 star
	setcycle 3 shape2 circle
	setcycle 3 shape3 triangle
	setcycle 3 shape4 cross
	setcycle 3 number1 1
	setcycle 3 number2 2
	setcycle 3 number3 3
	setcycle 3 number4 4
	setcycle 4 response_color yellow
	setcycle 4 response_number 2
	setcycle 4 response_shape star
	setcycle 4 color1 yellow
	setcycle 4 color2 green
	setcycle 4 color3 blue
	setcycle 4 color4 red
	setcycle 4 shape1 star
	setcycle 4 shape2 circle
	setcycle 4 shape3 triangle
	setcycle 4 shape4 cross
	setcycle 4 number1 1
	setcycle 4 number2 2
	setcycle 4 number3 3
	setcycle 4 number4 4
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	setcycle 8 response_color yellow
	setcycle 8 response_number 3
	setcycle 8 response_shape star
	setcycle 8 color1 yellow
	setcycle 8 color2 green
	setcycle 8 color3 blue
	setcycle 8 color4 red
	setcycle 8 shape1 star
	setcycle 8 shape2 circle
	setcycle 8 shape3 triangle
	setcycle 8 shape4 cross
	setcycle 8 number1 1
	setcycle 8 number2 2
	setcycle 8 number3 3
	setcycle 8 number4 4
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	setcycle 12 response_color yellow
	setcycle 12 response_number 4
	setcycle 12 response_shape star
	setcycle 12 color1 yellow
	setcycle 12 color2 green
	setcycle 12 color3 blue
	setcycle 12 color4 red
	setcycle 12 shape1 star
	setcycle 12 shape2 circle
	setcycle 12 shape3 triangle
	setcycle 12 shape4 cross
	setcycle 12 number1 1
	setcycle 12 number2 2
	setcycle 12 number3 3
	setcycle 12 number4 4
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	setcycle 16 response_color yellow
	setcycle 16 response_number 1
	setcycle 16 response_shape circle
	setcycle 16 color1 yellow
	setcycle 16 color2 green
	setcycle 16 color3 blue
	setcycle 16 color4 red
	setcycle 16 shape1 star
	setcycle 16 shape2 circle
	setcycle 16 shape3 triangle
	setcycle 16 shape4 cross
	setcycle 16 number1 1
	setcycle 16 number2 2
	setcycle 16 number3 3
	setcycle 16 number4 4
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	setcycle 32 response_color yellow
	setcycle 32 response_number 1
	setcycle 32 response_shape cross
	setcycle 32 color1 yellow
	setcycle 32 color2 green
	setcycle 32 color3 blue
	setcycle 32 color4 red
	setcycle 32 shape1 star
	setcycle 32 shape2 circle
	setcycle 32 shape3 triangle
	setcycle 32 shape4 cross
	setcycle 32 number1 1
	setcycle 32 number2 2
	setcycle 32 number3 3
	setcycle 32 number4 4
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	setcycle 48 response_color yellow
	setcycle 48 response_number 1
	setcycle 48 response_shape triangle
	setcycle 48 color1 yellow
	setcycle 48 color2 green
	setcycle 48 color3 blue
	setcycle 48 color4 red
	setcycle 48 shape1 star
	setcycle 48 shape2 circle
	setcycle 48 shape3 triangle
	setcycle 48 shape4 cross
	setcycle 48 number1 1
	setcycle 48 number2 2
	setcycle 48 number3 3
	setcycle 48 number4 4
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	shuffle_horiz color1 color2 color3 color4
	shuffle_horiz shape1 shape2 shape3 shape4
	shuffle_horiz number1 number2 number3 number4
	run trial_sequence

define sketchpad card_display
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{number1}-{color1}-{shape1}.png" scale=0.5 show_if=True x=-384 y=-192 z_index=0
	draw image center=1 file="{number2}-{color2}-{shape2}.png" scale=0.5 show_if=True x=-128 y=-192 z_index=0
	draw image center=1 file="{number3}-{color3}-{shape3}.png" scale=0.5 show_if=True x=128 y=-192 z_index=0
	draw image center=1 file="{number4}-{color4}-{shape4}.png" scale=0.5 show_if=True x=384 y=-192 z_index=0
	draw image center=1 file="{response_number}-{response_color}-{response_shape}.png" scale=0.5 show_if=True x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Which of the cards above matches the card below?<br />" x=0 y=0 z_index=0

define sketchpad correct_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#4e9a06" show_if=True style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop True

define sketchpad incorrect_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#ef2929" show_if=True style=default x=0 y=0 z_index=0

define keyboard_response press_a
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response a
	set allowed_responses "a;b;c;d"

define keyboard_response press_b
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response b
	set allowed_responses "a;b;c;d"

define keyboard_response press_c
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response c
	set allowed_responses "a;b;c;d"

define keyboard_response press_d
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response d
	set allowed_responses "a;b;c;d"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run card_display True
	run press_a "shape1 == response_shape"
	run press_b "shape2 == response_shape"
	run press_c "shape3 == response_shape"
	run press_d "shape4 == response_shape"
	run correct_feedback "correct == 1"
	run incorrect_feedback "correct == 0"

