---
API: 3
OpenSesame: 4.0.0a33
Platform: posix
---
set width 1024
set title "Wisconsin Card Sorting Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/ede/misc/opensesame_workshop_KLI2023/experiments"
set disable_garbage_collection True
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#3d3846"

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 64
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 color1 yellow
	setcycle 0 color2 green
	setcycle 0 color3 blue
	setcycle 0 color4 red
	setcycle 0 shape1 star
	setcycle 0 shape2 circle
	setcycle 0 shape3 triangle
	setcycle 0 shape4 cross
	setcycle 0 number1 1
	setcycle 0 number2 2
	setcycle 0 number3 3
	setcycle 0 number4 4
	setcycle 1 color1 yellow
	setcycle 1 color2 green
	setcycle 1 color3 blue
	setcycle 1 color4 red
	setcycle 1 shape1 star
	setcycle 1 shape2 circle
	setcycle 1 shape3 triangle
	setcycle 1 shape4 cross
	setcycle 1 number1 1
	setcycle 1 number2 2
	setcycle 1 number3 3
	setcycle 1 number4 4
	setcycle 2 color1 yellow
	setcycle 2 color2 green
	setcycle 2 color3 blue
	setcycle 2 color4 red
	setcycle 2 shape1 star
	setcycle 2 shape2 circle
	setcycle 2 shape3 triangle
	setcycle 2 shape4 cross
	setcycle 2 number1 1
	setcycle 2 number2 2
	setcycle 2 number3 3
	setcycle 2 number4 4
	setcycle 3 color1 yellow
	setcycle 3 color2 green
	setcycle 3 color3 blue
	setcycle 3 color4 red
	setcycle 3 shape1 star
	setcycle 3 shape2 circle
	setcycle 3 shape3 triangle
	setcycle 3 shape4 cross
	setcycle 3 number1 1
	setcycle 3 number2 2
	setcycle 3 number3 3
	setcycle 3 number4 4
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	shuffle_horiz color1 color2 color3 color4
	shuffle_horiz shape1 shape2 shape3 shape4
	shuffle_horiz number1 number2 number3 number4
	run trial_sequence

define sketchpad card_display
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{number1}-{color1}-{shape1}.png" scale=0.5 show_if=True x=-384 y=-192 z_index=0
	draw image center=1 file="{number2}-{color2}-{shape2}.png" scale=0.5 show_if=True x=-128 y=-192 z_index=0
	draw image center=1 file="{number3}-{color3}-{shape3}.png" scale=0.5 show_if=True x=128 y=-192 z_index=0
	draw image center=1 file="{number4}-{color4}-{shape4}.png" scale=0.5 show_if=True x=384 y=-192 z_index=0
	draw image center=1 file="{response_number}-{response_color}-{response_shape}.png" scale=0.5 show_if=True x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Which of the cards above matches the card below?<br />" x=0 y=0 z_index=0

define sketchpad correct_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#4e9a06" show_if=True style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions True
	run init_params True
	run block_loop True
	run goodbye True

define form_text_display goodbye
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of experiment"
	__form_text__
	Thanks for participating. Please let the experimenter know
	that you are done.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad incorrect_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#ef2929" show_if=True style=default x=0 y=0 z_index=0

define inline_script init_params
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	matching_rule = random.choice(['shape', 'number', 'color'])
	n_correct_reset = 5
	n_current_streak = 0
	__end__

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Welcome to the Wisconsin Card Sorting task. 
	Here you need to sort a target card (presented on the 
	bottom) based on shape, color or number. Which of these
	three rules is the correct one will not be provided
	explicitely, but needs to be learnt by you based on trial-and
	error and feedback. 
	
	You need to press a, b, c, or d to assign the target card to 
	one of the 4 rule cards at the top of the screen (a-d, left to right)
	
	So essentially put the target card where you think it belongs
	based on its features and the features of the rule cards.
	Good luck!
	
	Press Ok to start the experiment.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;b;c;d"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script set_correct_rule
	set description "Executes Python code"
	set _run ""
	___prepare__
	if matching_rule == 'shape':
	    if shape1 == response_shape:
	        correct_response = 'a'
	    elif shape2 == response_shape:
	        correct_response = 'b'
	    elif shape3 == response_shape:
	        correct_response = 'c'
	    elif shape4 == response_shape:
	        correct_response = 'd'
	if matching_rule == 'color':
	    if color1 == response_color:
	        correct_response = 'a'
	    elif color2 == response_color:
	        correct_response = 'b'
	    elif color3 == response_color:
	        correct_response = 'c'
	    elif color4 == response_color:
	        correct_response = 'd'
	if matching_rule == 'number':
	    if number1== response_number:
	        correct_response = 'a'
	    elif number2 == response_number:
	        correct_response = 'b'
	    elif number3 == response_number:
	        correct_response = 'c'
	    elif number4 == response_number:
	        correct_response = 'd'
	
	# Let's print some info to the debug window
	print('matching_rule = {}'.format(matching_rule))
	print('correct_response = {}'.format(correct_response))
	__end__

define inline_script set_response_card
	set description "Executes Python code"
	set _run ""
	___prepare__
	overlap1 = 2
	overlap2 = 2
	overlap3 = 2
	overlap4 = 2
	while overlap1 > 1 or overlap2 > 1 or overlap3 > 1 or overlap4 > 1:
	    response_shape = random.choice(['circle', 'cross', 'star', 'triangle'])
	    response_color = random.choice(['red', 'blue', 'yellow', 'green'])
	    response_number = random.choice([1, 2, 3, 4])
	    overlap1 = (response_shape == shape1) + (response_color == color1) + (response_number == number1)
	    overlap2 = (response_shape == shape2) + (response_color == color2) + (response_number == number2)
	    overlap3 = (response_shape == shape3) + (response_color == color3) + (response_number == number3)
	    overlap4 = (response_shape == shape4) + (response_color == color4) + (response_number == number4)
	    print('overlap = {} {} {} {}'.format(overlap1, overlap2, overlap3, overlap4))
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_response_card True
	run set_correct_rule True
	run card_display True
	run keyboard_response True
	run correct_feedback "correct == 1"
	run incorrect_feedback "correct == 0"
	run update_rule True
	run logger True

define inline_script update_rule
	set description "Executes Python code"
	___run__
	if correct: 
	    n_current_streak += 1
	else:
	    n_current_streak = 0
	    
	if n_current_streak >= n_correct_reset:
	    options = ['shape', 'number', 'color']
	    options.remove(matching_rule)
	    matching_rule = random.choice(options)
	__end__
	set _prepare ""

