---
API: 3
OpenSesame: 4.0.13
Platform: nt
---
set width 1024
set title "Wisconsin Card Sorting Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "47c87f94-a82d-0636-b77f-40fb00d57fe0"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\maalt\\OneDrive - Universität Wien\\Dokumente\\Uni\\Psychologie\\8. Semester\\Bachelorarbeit\\Experimente\\Winsconsin\\osweb-version"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 64
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 color1 yellow
	setcycle 0 color2 green
	setcycle 0 color3 blue
	setcycle 0 color4 red
	setcycle 0 shape1 star
	setcycle 0 shape2 circle
	setcycle 0 shape3 triangle
	setcycle 0 shape4 cross
	setcycle 0 number1 1
	setcycle 0 number2 2
	setcycle 0 number3 3
	setcycle 0 number4 4
	setcycle 1 color1 yellow
	setcycle 1 color2 green
	setcycle 1 color3 blue
	setcycle 1 color4 red
	setcycle 1 shape1 star
	setcycle 1 shape2 circle
	setcycle 1 shape3 triangle
	setcycle 1 shape4 cross
	setcycle 1 number1 1
	setcycle 1 number2 2
	setcycle 1 number3 3
	setcycle 1 number4 4
	setcycle 2 color1 yellow
	setcycle 2 color2 green
	setcycle 2 color3 blue
	setcycle 2 color4 red
	setcycle 2 shape1 star
	setcycle 2 shape2 circle
	setcycle 2 shape3 triangle
	setcycle 2 shape4 cross
	setcycle 2 number1 1
	setcycle 2 number2 2
	setcycle 2 number3 3
	setcycle 2 number4 4
	setcycle 3 color1 yellow
	setcycle 3 color2 green
	setcycle 3 color3 blue
	setcycle 3 color4 red
	setcycle 3 shape1 star
	setcycle 3 shape2 circle
	setcycle 3 shape3 triangle
	setcycle 3 shape4 cross
	setcycle 3 number1 1
	setcycle 3 number2 2
	setcycle 3 number3 3
	setcycle 3 number4 4
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	shuffle_horiz color1 color2 color3 color4
	shuffle_horiz shape1 shape2 shape3 shape4
	shuffle_horiz number1 number2 number3 number4
	run trial_sequence

define sketchpad card_display
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{number1}-{color1}-{shape1}.png" scale=0.5 show_if=True x=-384 y=-192 z_index=0
	draw image center=1 file="{number2}-{color2}-{shape2}.png" scale=0.5 show_if=True x=-128 y=-192 z_index=0
	draw image center=1 file="{number3}-{color3}-{shape3}.png" scale=0.5 show_if=True x=128 y=-192 z_index=0
	draw image center=1 file="{number4}-{color4}-{shape4}.png" scale=0.5 show_if=True x=384 y=-192 z_index=0
	draw image center=1 file="{response_number}-{response_color}-{response_shape}.png" scale=0.5 show_if=True x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Which of these cards matches the target card?" x=32 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=A x=-384 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=B x=-128 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=C x=128 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=D x=384 y=-32 z_index=0

define sketchpad correct_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#4e9a06" show_if=True style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_form_text_display True
	run new_form_consent True
	run instructions True
	run new_2_sketchpad True
	run new_sketchpad True
	run new_1_form_text_display True
	run init_matching_rule True
	run block_loop True
	run goodbye True
	run new_inline_javascript True

define form_text_display goodbye
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of the experiment"
	__form_text__
	
	Thank you for participating!
	
	You will now be redirected to a questionnaire regarding your media usage.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad incorrect_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#ef2929" show_if=True style=default x=0 y=0 z_index=0

define inline_javascript init_matching_rule
	set description "Executes Python code"
	___run__
	function choice(choices) {
	  let index = Math.floor(Math.random() * choices.length)
	  return choices[index]
	}
	
	var matching_rule = choice(['shape', 'number', 'color'])
	var correct_in_a_row = 0
	var correct = 0
	var response_color = null
	var response_shape = null
	var response_number = null
	__end__
	set _prepare ""

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	
	The following is the "Wisconsin Card Sorting" test.
	
	You will see several cards, each with symbols that differ in color, shape, and number. Your goal is to match each new card to one of four reference cards.
	
	At the beginning of the test, the rule (based on color, shape, or number) for matching the cards is unknown to you. You need to figure out the current rule based on the feedback you receive after each match. The feedback will tell you whether your choice was correct or incorrect.
	
	The rule for matching the cards will change several times throughout the test. Try to match as many cards correctly as possible.
	
	Press OK to see sample images that illustrate the procedure.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_text_display new_1_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Start
	__form_text__
	
	Good luck!
	
	Press OK to start the experiment!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define sketchpad new_2_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Sample Image:<br /><br />You need to select one of the top <br />cards that you believe matches <br />the bottom card.<br /><br />This can be based on <br />color, number, or shape." x=-512 y=96 z_index=1
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Which of these cards matches the target card?<br />" x=32 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=A x=-384 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=B x=-128 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=C x=128 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text=D x=384 y=-32 z_index=0
	draw rect color=white fill=0 h=256 penwidth=1 show_if=True w=192 x=-480 y=-320 z_index=0
	draw rect color=white fill=0 h=256 penwidth=1 show_if=True w=192 x=-224 y=-320 z_index=0
	draw rect color=white fill=0 h=256 penwidth=1 show_if=True w=192 x=32 y=-320 z_index=0
	draw rect color=white fill=0 h=256 penwidth=1 show_if=True w=192 x=288 y=-320 z_index=0
	draw rect color=white fill=0 h=256 penwidth=1 show_if=True w=192 x=-96 y=64 z_index=0
	draw image center=1 file="4-red-cross.png" scale=0.5000000000000001 show_if=True x=-128 y=-192 z_index=0
	draw image center=1 file="2-yellow-cross.png" scale=0.5000000000000001 show_if=True x=128 y=-192 z_index=0
	draw image center=1 file="3-red-triangle.png" scale=0.5000000000000001 show_if=True x=384 y=-192 z_index=0
	draw image center=1 file="1-blue-triangle.png" scale=0.5000000000000001 show_if=True x=0 y=192 z_index=0
	draw image center=1 file="2-yellow-star.png" scale=0.5000000000000001 show_if=True x=128 y=-192 z_index=0
	draw image center=1 file="1-green-cross.png" scale=0.5 show_if=True x=-384 y=-192 z_index=0
	draw image center=1 file="2-blue-star.png" scale=0.5000000000000001 show_if=True x=128 y=-192 z_index=0
	draw textline center=0 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="Press a, b, c, or d to select a card!" x=160 y=96 z_index=0

define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent Form"
	__form_text__
	Voluntariness.
	Your participation in this study is voluntary. You are free to withdraw from the study at any time without any consequences.
	
	Anonymity.
	Your data will be kept confidential and will only be evaluated in an anonymized form. Demographic information such as age or gender will not allow for any conclusions to be drawn about your identity.
	
	Questions.
	If you have any questions about this study, you will find contact information for the study leaders in the imprint section at the end of the study.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate!"
	set decline_message "To participate, you must accept the consent form!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information provided above."
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="{form_title}"
	widget 0 1 2 1 label center=no text="{form_text}"
	widget 0 2 2 1 checkbox text="{checkbox_text}" var=checkbox_status
	widget 0 3 1 1 button text="{accept_text}" var=accept_status
	widget 1 3 1 1 button text="{decline_text}"


define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Infos
	__form_text__
	Welcome to the experiment of my bachelor thesis. This experiment takes about 5 minutes. To leave fullscreen mode press esc.
	
	After completion the study gives credits for SurveySwap and SurveyCircle.
	
	Click the screen to proceed.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define inline_javascript new_inline_javascript
	set description "Executes Python code"
	___run__
	var my_link = "https://stonesitter.limesurvey.net/964522?newtest=Y&lang=en"
	
	// The jatos object only exists when the study is launched from JATOS.
	if (typeof jatos !== "undefined") {
	    window.open(my_link + "&jatosStudyResultId=" + jatos.studyResultId)
	}
	__end__
	set _prepare ""

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color="#00aa00" show_if=True style=default x=0 y=0 z_index=0
	draw textline center=0 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="After you make your selection, you will see either a red <br />or a green dot as feedback, indicating whether you have <br />made the correct (green) or incorrect (red) choice." x=-352 y=-320 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color="#ffffff" fill=0 penwidth=1 show_if=True x1=-256 x2=-32 y1=-160 y2=-32 z_index=0
	draw textline center=0 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=True text="After a while, the rule on which the matching is based will change.<br /><br />Press any key to continue." x=-448 y=160 z_index=0

define keyboard_response press_abcd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;b;c;d"

define inline_javascript select_response_card
	set description "Executes Python code"
	set _run ""
	___prepare__
	var overlap1 = 2
	var overlap2 = 2
	var overlap3 = 2
	var overlap4 = 2
	while (overlap1 > 1 ||  overlap2 > 1 || overlap3 > 1 || overlap4 > 1) {
	    console.log('overlap = ' + overlap1 + ' ' + overlap2 + ' ' + overlap3 + ' ' + overlap4)
	    response_shape = choice(['circle', 'cross', 'star', 'triangle'])
	    response_color = choice(['red', 'blue', 'yellow', 'green'])
	    response_number = choice([1, 2, 3, 4])
	    overlap1 = (response_shape === shape1) +
	        (response_color === color1) + 
	        (response_number === number1)
	    overlap2 = (response_shape === shape2) +
	        (response_color === color2) + 
	        (response_number === number2)
	    overlap3 = (response_shape === shape3) +
	        (response_color === color3) + 
	        (response_number ===number3)
	    overlap4 = (response_shape === shape4) +
	        (response_color === color4) + 
	        (response_number === number4)
	}
	console.log('overlap = ' + overlap1 + ' ' + overlap2 + ' ' + overlap3 + ' ' + overlap4)
	__end__

define inline_javascript set_correct_response
	set description "Executes Python code"
	set _run ""
	___prepare__
	if (matching_rule === 'shape') {
	    if (shape1 === response_shape) correct_response = 'a'
	    else if (shape2 === response_shape) correct_response = 'b'
	    else if (shape3 === response_shape) correct_response = 'c'
	    else if (shape4 === response_shape) correct_response = 'd'
	} else if (matching_rule === 'color') {
	    if (color1 === response_color) correct_response = 'a'
	    else if (color2 === response_color) correct_response = 'b'
	    else if (color3 === response_color) correct_response = 'c'
	    else if (color4 === response_color) correct_response = 'd'
	} else if (matching_rule === 'number') {
	    if (number1 === response_number) correct_response = 'a'
	    else if (number2 === response_number) correct_response = 'b'
	    else if (number3 === response_number) correct_response = 'c'
	    else if (number4 === response_number) correct_response = 'd'
	}
	console.log('matching_rule = ' + matching_rule)
	console.log('correct_response = ' + correct_response)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run select_response_card True
	run set_correct_response True
	run card_display True
	run press_abcd True
	run correct_feedback "correct == 1"
	run incorrect_feedback "correct == 0"
	run update_matching_rule True
	run logger True

define inline_javascript update_matching_rule
	set description "Executes Python code"
	___run__
	if (correct === 1) {
	    correct_in_a_row = correct_in_a_row + 1
	} else {
	    correct_in_a_row  = 0
	}
	if (correct_in_a_row === 5) {
	    if (matching_rule === 'shape') {
	        matching_rule = (Math.random() > 0.5) ? 'color' : 'number'
	    } else if (matching_rule === 'number') {
	        matching_rule = (Math.random() > 0.5) ? 'color' : 'shape'
	    } else if (matching_rule === 'color') {
	        matching_rule = (Math.random() > 0.5) ? 'shape' : 'number'
	    }
	    correct_in_a_row = 0
	}
	console.log('correct_in_a_row = ' + correct_in_a_row)
	__end__
	set _prepare ""

