---
API: 2.1
OpenSesame: 3.3.0a15
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Wisconsin Card Sorting Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set osf_id 5d7ceb95710c95001f58b178
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/sebastiaan/Documents/Research/Projects/misc/WCST"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background gray

define notepad README
	__note__
	This is an implementation of the Wisconsic Card Sorting Test (WCST).
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 64
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 color1 red
	setcycle 0 color2 blue
	setcycle 0 color3 yellow
	setcycle 0 color4 green
	setcycle 0 shape1 circle
	setcycle 0 shape2 triangle
	setcycle 0 shape3 star
	setcycle 0 shape4 cross
	setcycle 0 number1 1
	setcycle 0 number2 2
	setcycle 0 number3 3
	setcycle 0 number4 4
	setcycle 1 color1 red
	setcycle 1 color2 blue
	setcycle 1 color3 yellow
	setcycle 1 color4 green
	setcycle 1 shape1 circle
	setcycle 1 shape2 triangle
	setcycle 1 shape3 star
	setcycle 1 shape4 cross
	setcycle 1 number1 1
	setcycle 1 number2 2
	setcycle 1 number3 3
	setcycle 1 number4 4
	setcycle 2 color1 red
	setcycle 2 color2 blue
	setcycle 2 color3 yellow
	setcycle 2 color4 green
	setcycle 2 shape1 circle
	setcycle 2 shape2 triangle
	setcycle 2 shape3 star
	setcycle 2 shape4 cross
	setcycle 2 number1 1
	setcycle 2 number2 2
	setcycle 2 number3 3
	setcycle 2 number4 4
	setcycle 3 color1 red
	setcycle 3 color2 blue
	setcycle 3 color3 yellow
	setcycle 3 color4 green
	setcycle 3 shape1 circle
	setcycle 3 shape2 triangle
	setcycle 3 shape3 star
	setcycle 3 shape4 cross
	setcycle 3 number1 1
	setcycle 3 number2 2
	setcycle 3 number3 3
	setcycle 3 number4 4
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	shuffle_horiz color1 color2 color3 color4
	shuffle_horiz shape1 shape2 shape3 shape4
	shuffle_horiz number1 number2 number3 number4
	run trial_sequence

define sketchpad card_display
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[number1]-[color1]-[shape1].png" scale=0.5 show_if=always x=-384 y=-160 z_index=0
	draw image center=1 file="[number2]-[color2]-[shape2].png" scale=0.5 show_if=always x=-128 y=-160 z_index=0
	draw image center=1 file="[number3]-[color3]-[shape3].png" scale=0.5 show_if=always x=128 y=-160 z_index=0
	draw image center=1 file="[number4]-[color4]-[shape4].png" scale=0.5 show_if=always x=384 y=-160 z_index=0
	draw image center=1 file="[response_number]-[response_color]-[response_shape].png" scale=0.5 show_if=always x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Matches this card?" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Which of these cards:" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=A x=-384 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=B x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=C x=128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=D x=384 y=0 z_index=0

define sketchpad correct_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=always style=default x=0 y=0 z_index=0

define sketchpad example
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Matches this card?" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Which of these cards:" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=A x=-384 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=B x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=C x=128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=D x=384 y=0 z_index=0
	draw image center=1 file="1-blue-triangle.png" scale=0.5 show_if=always x=-384 y=-160 z_index=0
	draw image center=1 file="4-red-cross.png" scale=0.5 show_if=always x=-128 y=-160 z_index=0
	draw image center=1 file="3-yellow-star.png" scale=0.5 show_if=always x=128 y=-160 z_index=0
	draw image center=1 file="2-green-circle.png" scale=0.5 show_if=always x=384 y=-160 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=128 x2=256 y1=128 y2=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press 'D'<br />to match<br />by shape!" x=288 y=160 z_index=0
	draw image center=1 file="1-blue-circle.png" scale=0.5 show_if=always x=0 y=192 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run README always
	run instructions_sequence always
	run init_matching_rule always
	run block_loop always
	run goodbye always

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Finished<br /><br /><br /><br />Thank you for participating!<br /><br /><br />Press any key to exit" x=0 y=0 z_index=0
	draw image center=1 file="1-blue-circle.png" scale=0.25 show_if=always x=-352 y=-256 z_index=0
	draw image center=1 file="2-green-cross.png" scale=0.25 show_if=always x=352 y=-256 z_index=0
	draw image center=1 file="3-red-star.png" scale=0.25 show_if=always x=-352 y=256 z_index=0
	draw image center=1 file="4-yellow-triangle.png" scale=0.25 show_if=always x=352 y=256 z_index=0

define sketchpad incorrect_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=always style=default x=0 y=0 z_index=0

define inline_javascript init_matching_rule
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	function choice(choices) {
	  let index = Math.floor(Math.random() * choices.length)
	  return choices[index]
	}
	
	vars.matching_rule = choice(['shape', 'number', 'color'])
	vars.correct_in_a_row = 0
	__end__
	set _prepare ""

define sketchpad instructions1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Instructions<br /><br /><br />You will see four playing cards at the top,<br />and one playing card at the bottom.<br /><br />Your task is to indicate which of the top cards<br />matches the bottom card.<br /><br />Cards can match on color, shape, or number.<br />It is up to you to figure out the matching rule!<br /><br /><br />Press any key to see an example" x=0 y=0 z_index=0
	draw image center=1 file="1-blue-circle.png" scale=0.25 show_if=always x=-352 y=-256 z_index=0
	draw image center=1 file="2-green-cross.png" scale=0.25 show_if=always x=352 y=-256 z_index=0
	draw image center=1 file="3-red-star.png" scale=0.25 show_if=always x=-352 y=256 z_index=0
	draw image center=1 file="4-yellow-triangle.png" scale=0.25 show_if=always x=352 y=256 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Instructions<br /><br /><br />But beware! The matching rule occasionally changes.<br /><br />And then it is up to you figure out the new matching rule.<br /> <br /><br />Press any key to begin" x=0 y=0 z_index=0
	draw image center=1 file="1-blue-circle.png" scale=0.25 show_if=always x=-352 y=-256 z_index=0
	draw image center=1 file="2-green-cross.png" scale=0.25 show_if=always x=352 y=-256 z_index=0
	draw image center=1 file="3-red-star.png" scale=0.25 show_if=always x=-352 y=256 z_index=0
	draw image center=1 file="4-yellow-triangle.png" scale=0.25 show_if=always x=352 y=256 z_index=0

define sequence instructions_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions1 always
	run example always
	run press_d always
	run instructions2 always

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define keyboard_response press_abcd
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "a;b;c;d"

define keyboard_response press_d
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses d

define inline_javascript select_response_card
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	function choice(choices) {
	  let index = Math.floor(Math.random() * choices.length)
	  return choices[index]
	}
	
	let overlap1 = 2
	let overlap2 = 2
	let overlap3 = 2
	let overlap4 = 2
	while (overlap1 > 1 ||  overlap2 > 1 || overlap3 > 1 || overlap4 > 1) {
	    vars.response_shape = choice(['circle', 'cross', 'star', 'triangle'])
	    vars.response_color = choice(['red', 'blue', 'yellow', 'green'])
	    vars.response_number = choice([1, 2, 3, 4])
	    overlap1 = (vars.response_shape === vars.shape1) +
	        (vars.response_color === vars.color1) + 
	        (vars.response_number === vars.number1)
	    overlap2 = (vars.response_shape === vars.shape2) +
	        (vars.response_color === vars.color2) + 
	        (vars.response_number === vars.number2)
	    overlap3 = (vars.response_shape === vars.shape3) +
	        (vars.response_color === vars.color3) + 
	        (vars.response_number === vars.number3)
	    overlap4 = (vars.response_shape === vars.shape4) +
	        (vars.response_color === vars.color4) + 
	        (vars.response_number === vars.number4)
	}
	console.log('overlap = ' + overlap1 + ' ' + overlap2 + ' ' + overlap3 + ' ' + overlap4)
	__end__

define inline_javascript set_correct_response
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	if (vars.matching_rule === 'shape') {
	    if (vars.shape1 === vars.response_shape) vars.correct_response = 'a'
	    else if (vars.shape2 === vars.response_shape) vars.correct_response = 'b'
	    else if (vars.shape3 === vars.response_shape) vars.correct_response = 'c'
	    else if (vars.shape4 === vars.response_shape) vars.correct_response = 'd'
	} else if (vars.matching_rule === 'color') {
	    if (vars.color1 === vars.response_color) vars.correct_response = 'a'
	    else if (vars.color2 === vars.response_color) vars.correct_response = 'b'
	    else if (vars.color3 === vars.response_color) vars.correct_response = 'c'
	    else if (vars.color4 === vars.response_color) vars.correct_response = 'd'
	} else if (vars.matching_rule === 'number') {
	    if (vars.number1 === vars.response_number) vars.correct_response = 'a'
	    else if (vars.number2 === vars.response_number) vars.correct_response = 'b'
	    else if (vars.number3 === vars.response_number) vars.correct_response = 'c'
	    else if (vars.number4 === vars.response_number) vars.correct_response = 'd'
	}
	console.log('matching_rule = ' + vars.matching_rule)
	console.log('correct_response = ' + vars.correct_response)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run select_response_card always
	run set_correct_response always
	run card_display always
	run press_abcd always
	run correct_feedback "[correct] = 1"
	run incorrect_feedback "[correct] = 0"
	run update_matching_rule always
	run logger always

define inline_javascript update_matching_rule
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.correct === 1) {
	    vars.correct_in_a_row = vars.correct_in_a_row + 1
	} else {
	    vars.correct_in_a_row  = 0
	}
	if (vars.correct_in_a_row === 5) {
	    if (vars.matching_rule === 'shape') {
	        vars.matching_rule = (Math.random() > 0.5) ? 'color' : 'number'
	    } else if (vars.matching_rule === 'number') {
	        vars.matching_rule = (Math.random() > 0.5) ? 'color' : 'shape'
	    } else if (vars.matching_rule === 'color') {
	        vars.matching_rule = (Math.random() > 0.5) ? 'shape' : 'number'
	    }
	    vars.correct_in_a_row = 0
	}
	console.log('correct_in_a_row = ' + vars.correct_in_a_row)
	__end__
	set _prepare ""

